// This CellML file was generated at 2026-01-26T20:25:23.433680+00:00
//
// by [BG-Tools](https://github.com/CellDL/BG-Tools), version 0.8.8-beta.1
//
// from file:///Users/dbro078/BG-RDF/BG-Tools/tests/models/bvc.ttl#BVC_model
def model BG_BVC_model as
  def unit dim as
    unit dimensionless;
  enddef;
  def unit joule_per_mole as
    unit joule {expo: 1};
    unit mole {expo: -1};
  enddef;
  def unit coulomb_per_mole as
    unit coulomb {expo: 1};
    unit mole {expo: -1};
  enddef;
  def unit litre_per_mole as
    unit litre {expo: 1};
    unit mole {expo: -1};
  enddef;
  def unit per_mole as
    unit mole {expo: -1};
  enddef;
  def unit litre_per_second as
    unit litre {expo: 1};
    unit second {expo: -1};
  enddef;
  def unit mole_per_second as
    unit mole {expo: 1};
    unit second {expo: -1};
  enddef;
  def unit joule_per_coulomb as
    unit joule {expo: 1};
    unit coulomb {expo: -1};
  enddef;
  def unit litre_squared_per_joule_per_second as
    unit litre {expo: 2};
    unit second {expo: -1};
    unit joule {expo: -1};
  enddef;
  def unit joule_per_litre as
    unit joule {expo: 1};
    unit litre {expo: -1};
  enddef;

  def comp main as
    var t: second;
    var RT: joule_per_mole {init: 2578.73058};
    var F: coulomb_per_mole {init: 96485.0};
    var E_ac: joule {init: 60.0};
    var E_pt: joule {init: 1.0};
    var E_q_gi_W: joule {init: 1.0};
    var E_vc: joule {init: 60.0};
    var K_K: litre_per_mole {init: 1.0};
    var K_Na: litre_per_mole {init: 1.0};
    var u_K_f_v_giEpi_NKE: joule_per_mole;
    var u_K_f_v_ptEpi_NKE: joule_per_mole;
    var K_q_giEpi_Na: per_mole {init: 1.0};
    var K_q_gi_Na: per_mole {init: 1.0};
    var K_q_ptEpi_Na: per_mole {init: 1.0};
    var K_q_pt_Na: per_mole {init: 1.0};
    var K_q_vc_Na: per_mole {init: 1.0};
    var u_K_r_v_giEpi_NKE: joule_per_mole;
    var u_K_r_v_ptEpi_NKE: joule_per_mole;
    var L_ac_W: litre {init: 1.5};
    var L_pt_W: litre {init: 1.0};
    var L_vc_W: litre {init: 2.5};
    var U_ac_W: litre {init: 0.5};
    var U_pt_W: litre {init: 0.1};
    var U_vc_W: litre {init: 1.5};
    var v_cc_W: litre_per_second;
    var u_f_v_gi_Na: joule_per_mole;
    var u_f_v_gl_Na: joule_per_mole;
    var u_f_v_pt_Na: joule_per_mole;
    var v_giEpi_NKE: mole_per_second;
    var u_giEpi_e: joule_per_coulomb {init: -0.04};
    var v_gi_Na: mole_per_second;
    var v_gi_W: litre_per_second;
    var v_gl_Na: mole_per_second;
    var v_gl_W: litre_per_second;
    var v_in_Na: mole_per_second {init: 1.16e-06};
    var v_in_W: litre_per_second {init: 0.0};
    var k_cc_W: litre_squared_per_joule_per_second {init: 1.0};
    var k_giEpi_NKE: mole_per_second {init: 10000.0};
    var k_gi_W: litre_squared_per_joule_per_second {init: 1.0};
    var k_gl_W: litre_squared_per_joule_per_second {init: 1.0};
    var k_ptEpi_NKE: mole_per_second {init: 100000.0};
    var k_pt_W: litre_squared_per_joule_per_second {init: 0.0};
    var kappa_gi_Na: mole_per_second {init: 1.0};
    var kappa_gl_Na: mole_per_second {init: 1.0};
    var kappa_pt_Na: mole_per_second {init: 1.0};
    var v_lv_W: litre_per_second {init: 0.1};
    var v_out1_Na: mole_per_second {init: 0.0};
    var v_out1_W: litre_per_second {init: 0.0};
    var v_out2_Na: mole_per_second {init: 1.16e-06};
    var v_out2_W: litre_per_second {init: 0.0};
    var v_ptEpi_NKE: mole_per_second;
    var u_ptEpi_e: joule_per_coulomb {init: -0.04};
    var v_pt_Na: mole_per_second;
    var v_pt_W: litre_per_second;
    var q_ac_W: litre {init: 1.0};
    var u_q_ac_W: joule_per_litre;
    var v_q_ac_W: litre_per_second;
    var q_giEpi_K: mole {init: 0.012};
    var q_giEpi_Na: mole {init: 0.012};
    var u_q_giEpi_Na: joule_per_mole;
    var v_q_giEpi_Na: mole_per_second;
    var q_giEpi_W: litre {init: 0.5};
    var q_gi_Na: mole {init: 0.1};
    var u_q_gi_Na: joule_per_mole;
    var v_q_gi_Na: mole_per_second;
    var q_gi_W: litre {init: 1.0};
    var u_q_gi_W: joule_per_litre;
    var v_q_gi_W: litre_per_second;
    var q_ptEpi_K: mole {init: 0.012};
    var q_ptEpi_Na: mole {init: 0.012};
    var u_q_ptEpi_Na: joule_per_mole;
    var v_q_ptEpi_Na: mole_per_second;
    var q_ptEpi_W: litre {init: 0.5};
    var q_pt_Na: mole {init: 0.01};
    var u_q_pt_Na: joule_per_mole;
    var v_q_pt_Na: mole_per_second;
    var q_pt_W: litre {init: 0.1};
    var u_q_pt_W: joule_per_litre;
    var v_q_pt_W: litre_per_second;
    var q_vc_K: mole {init: 0.03};
    var q_vc_Na: mole {init: 0.84};
    var u_q_vc_Na: joule_per_mole;
    var v_q_vc_Na: mole_per_second;
    var q_vc_W: litre {init: 2.0};
    var u_q_vc_W: joule_per_litre;
    var v_q_vc_W: litre_per_second;
    var u_r_v_gi_Na: joule_per_mole;
    var u_r_v_gl_Na: joule_per_mole;
    var u_r_v_pt_Na: joule_per_mole;
    var u_v_cc_W: joule_per_litre;
    var u_v_gi_W: joule_per_litre;
    var u_v_gl_W: joule_per_litre;
    var u_v_in_Na: joule_per_mole;
    var u_v_in_W: joule_per_litre;
    var u_v_lv_W: joule_per_litre;
    var u_v_out1_Na: joule_per_mole;
    var u_v_out1_W: joule_per_litre;
    var u_v_out2_Na: joule_per_mole;
    var u_v_out2_W: joule_per_litre;
    var u_v_pt_W: joule_per_litre;
    // Element ODEs
    ode(q_ac_W, t) = v_q_ac_W;
    ode(q_giEpi_Na, t) = v_q_giEpi_Na;
    ode(q_gi_Na, t) = v_q_gi_Na;
    ode(q_gi_W, t) = v_q_gi_W;
    ode(q_ptEpi_Na, t) = v_q_ptEpi_Na;
    ode(q_pt_Na, t) = v_q_pt_Na;
    ode(q_pt_W, t) = v_q_pt_W;
    ode(q_vc_Na, t) = v_q_vc_Na;
    ode(q_vc_W, t) = v_q_vc_W;
    // Element algebraics
    u_K_f_v_giEpi_NKE = u_q_giEpi_Na;
    u_K_f_v_ptEpi_NKE = u_q_ptEpi_Na;
    u_K_r_v_giEpi_NKE = u_q_vc_Na;
    u_K_r_v_ptEpi_NKE = u_q_vc_Na;
    u_f_v_gi_Na = u_q_gi_Na;
    u_f_v_gl_Na = u_q_vc_Na;
    u_f_v_pt_Na = u_q_pt_Na;
    u_q_ac_W = E_ac*(-U_ac_W+q_ac_W)/pow(L_ac_W-q_ac_W, 2.0{dim});
    u_q_giEpi_Na = RT*ln(K_q_giEpi_Na*q_giEpi_Na);
    u_q_gi_Na = RT*ln(K_q_gi_Na*q_gi_Na);
    u_q_gi_W = E_q_gi_W/q_gi_W;
    u_q_ptEpi_Na = RT*ln(K_q_ptEpi_Na*q_ptEpi_Na);
    u_q_pt_Na = RT*ln(K_q_pt_Na*q_pt_Na);
    u_q_pt_W = E_pt*(-U_pt_W+q_pt_W)/pow(L_pt_W-q_pt_W, 2.0{dim});
    u_q_vc_Na = RT*ln(K_q_vc_Na*q_vc_Na);
    u_q_vc_W = E_vc*(-U_vc_W+q_vc_W)/pow(L_vc_W-q_vc_W, 2.0{dim});
    u_r_v_gi_Na = u_q_giEpi_Na;
    u_r_v_gl_Na = u_q_pt_Na;
    u_r_v_pt_Na = u_q_ptEpi_Na;
    u_v_cc_W = E_ac*(-U_ac_W+q_ac_W)/pow(L_ac_W-q_ac_W, 2.0{dim})-E_vc*(-U_vc_W+q_vc_W)/pow(L_vc_W-q_vc_W, 2.0{dim});
    u_v_gi_W = E_q_gi_W/q_gi_W-E_vc*(-U_vc_W+q_vc_W)/pow(L_vc_W-q_vc_W, 2.0{dim});
    u_v_gl_W = E_ac*(-U_ac_W+q_ac_W)/pow(L_ac_W-q_ac_W, 2.0{dim})-E_pt*(-U_pt_W+q_pt_W)/pow(L_pt_W-q_pt_W, 2.0{dim});
    u_v_in_Na = -(RT*ln(K_q_gi_Na*q_gi_Na));
    u_v_in_W = -(E_q_gi_W/q_gi_W);
    u_v_lv_W = -(E_ac*(-U_ac_W+q_ac_W)/pow(L_ac_W-q_ac_W, 2.0{dim}))+E_vc*(-U_vc_W+q_vc_W)/pow(L_vc_W-q_vc_W, 2.0{dim});
    u_v_out1_Na = RT*ln(K_q_gi_Na*q_gi_Na);
    u_v_out1_W = E_q_gi_W/q_gi_W;
    u_v_out2_Na = RT*ln(K_q_pt_Na*q_pt_Na);
    u_v_out2_W = E_pt*(-U_pt_W+q_pt_W)/pow(L_pt_W-q_pt_W, 2.0{dim});
    u_v_pt_W = E_pt*(-U_pt_W+q_pt_W)/pow(L_pt_W-q_pt_W, 2.0{dim})-E_vc*(-U_vc_W+q_vc_W)/pow(L_vc_W-q_vc_W, 2.0{dim});
    v_cc_W = k_cc_W*u_v_cc_W;
    v_giEpi_NKE = 3.0{dim}*k_giEpi_NKE*(-(pow(K_K*q_giEpi_K/q_giEpi_W, 2.0{dim})*pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})*exp(2.0{dim}*F*u_giEpi_e/RT))+pow(K_K*q_vc_K/q_vc_W, 2.0{dim})*pow(K_Na*q_giEpi_Na/q_giEpi_W, 3.0{dim}))/((pow(K_K*q_giEpi_K/q_giEpi_W, 2.0{dim})+1.0{dim})*(pow(K_K*q_vc_K/q_vc_W, 2.0{dim})+1.0{dim})*(pow(K_Na*q_giEpi_Na/q_giEpi_W, 3.0{dim})+1.0{dim})*(pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})+1.0{dim}));
    v_gi_Na = kappa_gi_Na*(exp(u_f_v_gi_Na/RT)-exp(u_r_v_gi_Na/RT));
    v_gi_W = RT*k_gi_W*(-(q_gi_Na/q_gi_W)+q_vc_Na/q_vc_W);
    v_gl_Na = kappa_gl_Na*(exp(u_f_v_gl_Na/RT)-exp(u_r_v_gl_Na/RT));
    v_gl_W = k_gl_W*u_v_gl_W;
    v_ptEpi_NKE = 3.0{dim}*k_ptEpi_NKE*(-(pow(K_K*q_ptEpi_K/q_ptEpi_W, 2.0{dim})*pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})*exp(2.0{dim}*F*u_ptEpi_e/RT))+pow(K_K*q_vc_K/q_vc_W, 2.0{dim})*pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3.0{dim}))/((pow(K_K*q_ptEpi_K/q_ptEpi_W, 2.0{dim})+1.0{dim})*(pow(K_K*q_vc_K/q_vc_W, 2.0{dim})+1.0{dim})*(pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3.0{dim})+1.0{dim})*(pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})+1.0{dim}));
    v_pt_Na = kappa_pt_Na*(exp(u_f_v_pt_Na/RT)-exp(u_r_v_pt_Na/RT));
    v_pt_W = RT*k_pt_W*(-(q_pt_Na/q_pt_W)+q_vc_Na/q_vc_W);
    v_q_ac_W = -(k_cc_W*u_v_cc_W)-k_gl_W*u_v_gl_W+v_lv_W;
    v_q_giEpi_Na = -(3.0{dim}*k_giEpi_NKE*(-(pow(K_K*q_giEpi_K/q_giEpi_W, 2.0{dim})*pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})*exp(2.0{dim}*F*u_giEpi_e/RT))+pow(K_K*q_vc_K/q_vc_W, 2.0{dim})*pow(K_Na*q_giEpi_Na/q_giEpi_W, 3.0{dim}))/((pow(K_K*q_giEpi_K/q_giEpi_W, 2.0{dim})+1.0{dim})*(pow(K_K*q_vc_K/q_vc_W, 2.0{dim})+1.0{dim})*(pow(K_Na*q_giEpi_Na/q_giEpi_W, 3.0{dim})+1.0{dim})*(pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})+1.0{dim})))+kappa_gi_Na*(exp(u_f_v_gi_Na/RT)-exp(u_r_v_gi_Na/RT));
    v_q_gi_Na = -(kappa_gi_Na*(exp(u_f_v_gi_Na/RT)-exp(u_r_v_gi_Na/RT)))+v_in_Na-v_out1_Na;
    v_q_gi_W = -(RT*k_gi_W*(-(q_gi_Na/q_gi_W)+q_vc_Na/q_vc_W))+v_in_W-v_out1_W;
    v_q_ptEpi_Na = -(3.0{dim}*k_ptEpi_NKE*(-(pow(K_K*q_ptEpi_K/q_ptEpi_W, 2.0{dim})*pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})*exp(2.0{dim}*F*u_ptEpi_e/RT))+pow(K_K*q_vc_K/q_vc_W, 2.0{dim})*pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3.0{dim}))/((pow(K_K*q_ptEpi_K/q_ptEpi_W, 2.0{dim})+1.0{dim})*(pow(K_K*q_vc_K/q_vc_W, 2.0{dim})+1.0{dim})*(pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3.0{dim})+1.0{dim})*(pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})+1.0{dim})))+kappa_pt_Na*(exp(u_f_v_pt_Na/RT)-exp(u_r_v_pt_Na/RT));
    v_q_pt_Na = kappa_gl_Na*(exp(u_f_v_gl_Na/RT)-exp(u_r_v_gl_Na/RT))-kappa_pt_Na*(exp(u_f_v_pt_Na/RT)-exp(u_r_v_pt_Na/RT))-v_out2_Na;
    v_q_pt_W = -(RT*k_pt_W*(-(q_pt_Na/q_pt_W)+q_vc_Na/q_vc_W))+k_gl_W*u_v_gl_W-v_out2_W;
    v_q_vc_Na = 3.0{dim}*k_giEpi_NKE*(-(pow(K_K*q_giEpi_K/q_giEpi_W, 2.0{dim})*pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})*exp(2.0{dim}*F*u_giEpi_e/RT))+pow(K_K*q_vc_K/q_vc_W, 2.0{dim})*pow(K_Na*q_giEpi_Na/q_giEpi_W, 3.0{dim}))/((pow(K_K*q_giEpi_K/q_giEpi_W, 2.0{dim})+1.0{dim})*(pow(K_K*q_vc_K/q_vc_W, 2.0{dim})+1.0{dim})*(pow(K_Na*q_giEpi_Na/q_giEpi_W, 3.0{dim})+1.0{dim})*(pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})+1.0{dim}))+3.0{dim}*k_ptEpi_NKE*(-(pow(K_K*q_ptEpi_K/q_ptEpi_W, 2.0{dim})*pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})*exp(2.0{dim}*F*u_ptEpi_e/RT))+pow(K_K*q_vc_K/q_vc_W, 2.0{dim})*pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3.0{dim}))/((pow(K_K*q_ptEpi_K/q_ptEpi_W, 2.0{dim})+1.0{dim})*(pow(K_K*q_vc_K/q_vc_W, 2.0{dim})+1.0{dim})*(pow(K_Na*q_ptEpi_Na/q_ptEpi_W, 3.0{dim})+1.0{dim})*(pow(K_Na*q_vc_Na/q_vc_W, 3.0{dim})+1.0{dim}))-kappa_gl_Na*(exp(u_f_v_gl_Na/RT)-exp(u_r_v_gl_Na/RT));
    v_q_vc_W = RT*k_gi_W*(-(q_gi_Na/q_gi_W)+q_vc_Na/q_vc_W)+RT*k_pt_W*(-(q_pt_Na/q_pt_W)+q_vc_Na/q_vc_W)+k_cc_W*u_v_cc_W-v_lv_W;
  enddef;
enddef;
